PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $images
      pos = (0.0, 0.0)
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Welcome_Screen
    TextComponent text_Welcome_Screen
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to the Experiment!
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    TextComponent text_Introduction
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        Take a comfortable position and try to move as little as possible. In the following experiment, you will be shown multiple images for 2s each with a 2s black screen in between. All you need to do is to focus on the displayed images.

        The experiment takes approx. 40 minutes.

        Please focus on the screen and press the SPACEBAR to continue...
    KeyboardComponent key_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine blank
    TextComponent text_Blank
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Goodbye_Screen
    TextComponent text_GoodbyeScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Thank You for participating!
        The experiment is finished. :-)
  Routine Here_we_go
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent text_go
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = Here we go!
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Flow
  Routine Welcome_Screen
  Routine Here_we_go
  LoopInitiator trials_Image_and_Blank loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'images': 'datasets/debug_psychopy/banana/banana1.JPEG', 'group_label': 0, 'label': 1},
      {'images': 'datasets/debug_psychopy/banana/banana2.JPEG', 'group_label': 0, 'label': 2},
      {'images': 'datasets/debug_psychopy/banana/banana3.JPEG', 'group_label': 0, 'label': 3},
      {'images': 'datasets/debug_psychopy/banana/banana4.JPEG', 'group_label': 0, 'label': 4},
      {'images': 'datasets/debug_psychopy/banana/banana5.JPEG', 'group_label': 0, 'label': 5},
      {'images': 'datasets/debug_psychopy/airliner/airliner1.JPEG', 'group_label': 1, 'label': 6},
      {'images': 'datasets/debug_psychopy/airliner/airliner2.JPEG', 'group_label': 1, 'label': 7},
      {'images': 'datasets/debug_psychopy/airliner/airliner3.JPEG', 'group_label': 1, 'label': 8},
      {'images': 'datasets/debug_psychopy/airliner/airliner4.JPEG', 'group_label': 1, 'label': 9},
      {'images': 'datasets/debug_psychopy/airliner/airliner5.JPEG', 'group_label': 1, 'label': 10},
      {'images': 'datasets/debug_psychopy/jacko_lantern/lantern1.JPEG', 'group_label': 2, 'label': 11},
      {'images': 'datasets/debug_psychopy/jacko_lantern/lantern2.JPEG', 'group_label': 2, 'label': 12},
      {'images': 'datasets/debug_psychopy/jacko_lantern/lantern3.JPEG', 'group_label': 2, 'label': 13},
      {'images': 'datasets/debug_psychopy/jacko_lantern/lantern4.JPEG', 'group_label': 2, 'label': 14},
      {'images': 'datasets/debug_psychopy/jacko_lantern/lantern5.JPEG', 'group_label': 2, 'label': 15}]
    Routine trial
    Routine blank
  LoopTerminator trials_Image_and_Blank
  Routine Goodbye_Screen
